CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:49
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:ASAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Trans
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:DAPI
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:ASAP
    Name the output image:CropASAP
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:All
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
Crop:[module_num:7|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
    Select the input image:RFP
    Name the output image:CropRFP
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:All
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
Crop:[module_num:8|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
    Select the input image:Trans
    Name the output image:CropTrans
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:All
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
GaussianFilter:[module_num:9|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
    Select the input image:CropBlue
    Name the output image:GaussianFilter1
    Sigma:1

GaussianFilter:[module_num:10|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
    Select the input image:GaussianFilter1
    Name the output image:GaussianFilter2
    Sigma:200

CorrectIlluminationApply:[module_num:11|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
    Select the input image:GaussianFilter1
    Name the output image:CorrDAPI
    Select the illumination function:GaussianFilter2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:12|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
    Select the input image:CorrDAPI
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.07,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:IdentifyPrimaryObjectsAllNuc
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.075,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

GaussianFilter:[module_num:15|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
    Select the input image:CropRFP
    Name the output image:GaussianFilterR1
    Sigma:1

GaussianFilter:[module_num:16|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
    Select the input image:GaussianFilterR1
    Name the output image:GaussianFilterR2
    Sigma:200

CorrectIlluminationApply:[module_num:17|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
    Select the input image:GaussianFilterR1
    Name the output image:CorrRFP
    Select the illumination function:GaussianFilterR2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:18|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
    Select the input image:CorrRFP
    Name the output image:RescaleIntensity2
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:IdentifyPrimaryObjects
    Select neighboring objects to measure:IdentifyPrimaryObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:IdentifyPrimaryObjects, IdentifyPrimaryObjectsAllNuc
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:CropASAP, CropBlue, RescaleIntensity, RescaleIntensity2
    Select objects to measure:IdentifyPrimaryObjectsAllNuc

FilterObjects:[module_num:22|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjects
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:Yes
    Maximum value:200
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:23|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
    Select the objects to filter:IdentifyPrimaryObjectsAllNuc
    Name the output objects:FilterObjectsAllNuc
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsAllnuc
    Select the measurement to filter by:Intensity_MaxIntensity_RescaleIntensity2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.015
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_CropASAP
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:30
    Filter using a maximum measurement value?:Yes
    Maximum value:1000

MeasureObjectIntensity:[module_num:24|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
    Select images to measure:CorrDAPI
    Select objects to measure:FilterObjectsAllNuc

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity2
    Name the output image:OrigOverlayrejectNucRFP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:RemovedObjectsAllnuc

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CropTrans
    Name the output image:OrigOverlayRejectNucTrans
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:RemovedObjectsAllnuc

OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CropTrans
    Name the output image:OverlayLive
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:IdentifyPrimaryObjectsAllNuc

IdentifySecondaryObjects:[module_num:28|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
    Select the input objects:FilterObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrRFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

MeasureObjectNeighbors:[module_num:29|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
    Select objects to measure:IdentifySecondaryObjects
    Select neighboring objects to measure:IdentifySecondaryObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:30|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
    Select object sets to measure:FilterObjectsAllNuc, IdentifySecondaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:31|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
    Select images to measure:CropASAP
    Select objects to measure:IdentifySecondaryObjects

FilterObjects:[module_num:32|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
    Select the objects to filter:IdentifySecondaryObjects
    Name the output objects:FilterObjects2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsR
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_10
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.7
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:Intensity_MaxIntensity_CropASAP
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1

ExpandOrShrinkObjects:[module_num:33|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
    Select the input objects:IdentifySecondaryObjects
    Name the output objects:ExpandedFilteredR1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskImage:[module_num:34|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
    Select the input image:RescaleIntensity2
    Name the output image:MaskRFP
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjects2
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:35|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
    Select the input image:MaskRFP
    Name the primary objects to be identified:IdentifyPrimaryObjectsAggragates
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.30,1.0
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    Size of adaptive window:30
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    Thresholding method:Sauvola

IdentifyTertiaryObjects:[module_num:36|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
    Select the larger identified objects:FilterObjects2
    Select the smaller identified objects:IdentifyPrimaryObjectsAggragates
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

IdentifySecondaryObjects:[module_num:37|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
    Select the input objects:FilterObjects2
    Name the objects to be identified:IdentifySecondaryObjectsExpanded
    Select the method to identify the secondary objects:Distance - N
    Select the input image:CorrRFP
    Number of pixels by which to expand the primary objects:6
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
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
IdentifyTertiaryObjects:[module_num:38|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
    Select the larger identified objects:IdentifySecondaryObjectsExpanded
    Select the smaller identified objects:ExpandedFilteredR1
    Name the tertiary objects to be identified:Background
    Shrink smaller object prior to subtraction?:No

RescaleIntensity:[module_num:39|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
    Select the input image:CropASAP
    Name the output image:RescaleIntensityASAP
    Rescaling method:Divide each image by the same value
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    Divisor value:1
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
OverlayOutlines:[module_num:40|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity2
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Cytoplasm

OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityASAP
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:Background

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:ASAP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:ASAP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:OverlayLive
    Select method for constructing file names:From image filename
    Select image name for file prefix:Trans
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj3
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayrejectNucRFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj4
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayRejectNucTrans
    Select method for constructing file names:From image filename
    Select image name for file prefix:Trans
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj5
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:47|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
    Select images to measure:CorrDAPI, CorrRFP, CropASAP, CropRFP
    Select objects to measure:Background, Cytoplasm, FilterObjects, FilterObjects2

CalculateMath:[module_num:48|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
    Name the output measurement:MinusBackground
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:Cytoplasm
    Select the minuend measurement:Intensity_MeanIntensity_CropASAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:Background
    Select the subtrahend measurement:Intensity_MeanIntensity_CropASAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:49|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifySecondaryObjects|Neighbors_FirstClosestDistance_10,IdentifySecondaryObjects|Neighbors_SecondClosestObjectNumber_10,IdentifySecondaryObjects|Neighbors_AngleBetweenNeighbors_10,IdentifySecondaryObjects|Neighbors_SecondClosestDistance_10,IdentifySecondaryObjects|Neighbors_PercentTouching_10,IdentifySecondaryObjects|Neighbors_NumberOfNeighbors_10,IdentifySecondaryObjects|Neighbors_FirstClosestObjectNumber_10,IdentifySecondaryObjects|Intensity_MinIntensityEdge_CropASAP,IdentifySecondaryObjects|Intensity_IntegratedIntensityEdge_CropASAP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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