CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w4")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:Trans
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:DNA
    Name the output image:GaussianFilterD1
    Sigma:1

GaussianFilter:[module_num:6|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
    Select the input image:GaussianFilterD1
    Name the output image:GaussianFilterD2
    Sigma:102

CorrectIlluminationApply:[module_num:7|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
    Select the input image:GaussianFilterD1
    Name the output image:CorrBlue
    Select the illumination function:GaussianFilterD2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:IdentifyPrimaryObjectsD
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
GaussianFilter:[module_num:9|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
    Select the input image:GFP
    Name the output image:GaussianFilterG1
    Sigma:1

GaussianFilter:[module_num:10|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
    Select the input image:GaussianFilterG1
    Name the output image:GaussianFilterG2
    Sigma:102

CorrectIlluminationApply:[module_num:11|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
    Select the input image:GaussianFilterG1
    Name the output image:CorrGFP
    Select the illumination function:GaussianFilterG2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:CorrGFP
    Name the primary objects to be identified:IdentifyPrimaryObjectsG
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
GaussianFilter:[module_num:13|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
    Select the input image:RFP
    Name the output image:GaussianFilterR1
    Sigma:1

GaussianFilter:[module_num:14|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
    Select the input image:GaussianFilterR1
    Name the output image:GaussianFilterR2
    Sigma:102

CorrectIlluminationApply:[module_num:15|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
    Select the input image:GaussianFilterR1
    Name the output image:CorrRFP
    Select the illumination function:GaussianFilterR2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:CorrRFP
    Name the primary objects to be identified:IdentifyPrimaryObjectsR
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.003,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:17|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
    Select the input image:CorrBlue
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjectsD
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    Invert the mask?:No

RescaleIntensity:[module_num:18|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
    Select the input image:MaskBlue
    Name the output image:MaskBlueRI
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
MaskImage:[module_num:19|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
    Select the input image:CorrGFP
    Name the output image:MaskGFP
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjectsD
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    Invert the mask?:No

RescaleIntensity:[module_num:20|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
    Select the input image:MaskGFP
    Name the output image:MaskGFPRI
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
MaskImage:[module_num:21|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
    Select the input image:MaskGFPRI
    Name the output image:MaskGFPFinal
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjectsG
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    Invert the mask?:No

MaskImage:[module_num:22|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
    Select the input image:CorrRFP
    Name the output image:MaskRFP
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjectsD
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    Invert the mask?:No

RescaleIntensity:[module_num:23|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
    Select the input image:MaskRFP
    Name the output image:MaskRFPRI
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
MaskImage:[module_num:24|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
    Select the input image:MaskRFPRI
    Name the output image:MaskRFPFinal
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjectsR
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    Invert the mask?:No

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:MaskBlueRI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:MaskGFPFinal
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:MaskRFPFinal
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
