CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Bright
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Blue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:Red
    Name the output image:CropRed
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:7|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
    Select the input image:Green
    Name the output image:CropGreen
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:Edges
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
GaussianFilter:[module_num:8|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
    Select the input image:CropBlue
    Name the output image:GaussianFilterBlue1
    Sigma:1

GaussianFilter:[module_num:9|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
    Select the input image:GaussianFilterBlue1
    Name the output image:GaussianFilterBlue2
    Sigma:200

CorrectIlluminationApply:[module_num:10|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
    Select the input image:GaussianFilterBlue1
    Name the output image:CorrBlue
    Select the illumination function:GaussianFilterBlue2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:11|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
    Select the input image:CorrBlue
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:0.5
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:IdentifyPrimaryObjects1
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:Yes
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
MeasureImageIntensity:[module_num:13|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
    Select images to measure:CorrBlue, CropBlue
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:IdentifyPrimaryObjects1
    Calculate custom percentiles:No
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:IdentifyPrimaryObjects1
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:IdentifyPrimaryObjects1
    Name the output image:CellImageBlue
    Select the color format:Color
    Select the colormap:Blues

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CellImageBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Width_Bright,Image|Width_Red,Image|Width_Green,Image|Width_Blue,Image|ExecutionTime_10CorrectIlluminationApply,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_05Crop,Image|ExecutionTime_07Crop,Image|ExecutionTime_09GaussianFilter,Image|ExecutionTime_11RescaleIntensity,Image|ExecutionTime_02Metadata,Image|ExecutionTime_12IdentifyPrimaryObjects,Image|ExecutionTime_16SaveImages,Image|ExecutionTime_06Crop,Image|ExecutionTime_08GaussianFilter,Image|ExecutionTime_13MeasureImageIntensity,Image|ExecutionTime_15ConvertObjectsToImage,Image|ExecutionTime_14MeasureObjectSizeShape,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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