CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P][0-9]{1,2})_Ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:DNA
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:All
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
RescaleIntensity:[module_num:6|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
    Select the input image:CropBlue
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:7|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
    Select the input image:CropBlue
    Name the output image:GaussianFilter
    Sigma:355

CorrectIlluminationApply:[module_num:8|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
    Select the input image:CropBlue
    Name the output image:CorrBlue
    Select the illumination function:GaussianFilter
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:9|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
    Select the input image:CorrBlue
    Name the output image:RescaleIntensity2
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:10|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
    Select the input image:RescaleIntensity2
    Name the output image:GaussianFilter2
    Sigma:20

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:GaussianFilter2
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):70,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:.062,1
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    Log transform before thresholding?:Yes
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage1
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CellImage1
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:All
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.9

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:CorrBlue, CropBlue
    Select objects to measure:FilterObjects1

FilterObjects:[module_num:17|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
    Select the objects to filter:FilterObjects1
    Name the output objects:FilterObjects2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_CropBlue
    Filter using a minimum measurement value?:Yes
    Minimum value:.04
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:FilterObjects2
    Name the output image:CellImage2
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:CellImage2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:F2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:FilterObjects2
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:CorrBlue, CropBlue
    Select objects to measure:FilterObjects2

MaskImage:[module_num:22|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
    Select the input image:CropBlue
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjects2
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    Invert the mask?:No

MaskImage:[module_num:23|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
    Select the input image:CorrBlue
    Name the output image:MaskBlueCorr
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjects2
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    Invert the mask?:No

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:MaskBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:MASK
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:MaskBlueCorr
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:MASKCORR
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|AreaShape_MaxFeretDiameter,IdentifyPrimaryObjects|AreaShape_MinFeretDiameter,IdentifyPrimaryObjects|AreaShape_Extent,IdentifyPrimaryObjects|AreaShape_Center_Y,IdentifyPrimaryObjects|AreaShape_Center_X,IdentifyPrimaryObjects|AreaShape_BoundingBoxMaximum_X,IdentifyPrimaryObjects|AreaShape_BoundingBoxMaximum_Y,IdentifyPrimaryObjects|AreaShape_Solidity,IdentifyPrimaryObjects|AreaShape_Orientation,IdentifyPrimaryObjects|AreaShape_Perimeter,IdentifyPrimaryObjects|AreaShape_MajorAxisLength,IdentifyPrimaryObjects|AreaShape_MedianRadius,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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