CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "d4.TIF")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:RescaleIntensity
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceEdges:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the output image:EdgedImage
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    Select an edge-finding method:Prewitt
    Select edge direction to enhance:All
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EdgedImage
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):200,2500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
EditObjectsManually:[module_num:9|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
    Select the objects to be edited:IdentifyPrimaryObjects
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:RescaleIntensity
    Allow overlapping objects?:No

OverlayObjects:[module_num:10|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
    Input:EdgedImage
    Name the output image:OverlayObjects1
    Objects:EditedObjects
    Opacity:0.3

IdentifyObjectsManually:[module_num:11|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
    Select the input image:OverlayObjects1
    Name the objects to be identified:Cells

CombineObjects:[module_num:12|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
    Select initial object set:EditedObjects
    Select object set to combine:Cells
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

OverlayObjects:[module_num:13|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
    Input:RescaleIntensity
    Name the output image:OverlayObjects2
    Objects:CombinedObjects
    Opacity:0.3

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:CombinedObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ExecutionTime_08IdentifyPrimaryObjects,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_05RescaleIntensity,Image|ExecutionTime_14SaveImages,Image|ExecutionTime_15MeasureObjectSizeShape,Image|ExecutionTime_09EditObjectsManually,Image|ExecutionTime_07EnhanceEdges,Image|ExecutionTime_02Metadata,Image|ExecutionTime_13OverlayObjects,Image|ExecutionTime_12CombineObjects,Image|ExecutionTime_11IdentifyObjectsManually,Image|ExecutionTime_01Images,Image|ExecutionTime_10OverlayObjects,Image|ExecutionTime_06ImageMath,Image|ExecutionTime_04Groups,Image|FileName_DNA,Image|Width_DNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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