CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d1.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///Z:/Juanita/CellProfilerPipes/Spheroid_analysis/Image%20needed%20for%20migration%20pipeline/B2_White.tif
    Name to assign this image:White
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the output image:GaussianFilter1
    Sigma:1

GaussianFilter:[module_num:7|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
    Select the input image:GaussianFilter1
    Name the output image:GaussianFilter2
    Sigma:400

CorrectIlluminationApply:[module_num:8|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
    Select the input image:GaussianFilter1
    Name the output image:CorrBlue
    Select the illumination function:GaussianFilter2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:9|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
    Select the input image:CorrBlue
    Name the output image:RescaleIntensity2
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:CorrBlue
    Name the output image:RescaleIntensityUse
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:RescaleIntensity2
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):50,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:.2
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
OverlayObjects:[module_num:12|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
    Input:RescaleIntensity2
    Name the output image:OverlayObjects
    Objects:IdentifyPrimaryObjects
    Opacity:0.3

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskImage:[module_num:14|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
    Select the input image:RescaleIntensityUse
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects
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    Invert the mask?:Yes

TopHatTransform:[module_num:15|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
    Select the input image:MaskBlue
    Name the output image:TopHatTransform
    Structuring element:disk,4
    Operation:White top-hat transform

RescaleIntensity:[module_num:16|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
    Select the input image:TopHatTransform
    Name the output image:RescaleIntensity3
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:RescaleIntensity3
    Name the primary objects to be identified:IdentifyPrimaryObjects2
    Typical diameter of objects, in pixel units (Min,Max):3,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.08,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:IdentifyPrimaryObjects2
    Name the output image:CellImage4
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:CellImage4
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Migrating
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

CombineObjects:[module_num:20|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
    Select initial object set:IdentifyPrimaryObjects2
    Select object set to combine:IdentifyPrimaryObjects
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjectsFirst

MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:CombinedObjectsFirst
    Select neighboring objects to measure:CombinedObjectsFirst
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:22|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
    Select the objects to filter:CombinedObjectsFirst
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Neighbors_FirstClosestDistance_Expanded
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:150

SplitOrMergeObjects:[module_num:23|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
    Select the input objects:FilterObjects
    Name the new objects:RelabeledNuclei
    Operation:Merge
    Maximum distance within which to merge objects:200
    Merge using a grayscale image?:No
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    Merging method:Distance
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
EditObjectsManually:[module_num:24|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
    Select the objects to be edited:RelabeledNuclei
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:White
    Allow overlapping objects?:No

CombineObjects:[module_num:25|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
    Select initial object set:IdentifyPrimaryObjects
    Select object set to combine:EditedObjects
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:CombinedObjects
    Name the output image:CellImage2
    Select the color format:Color
    Select the colormap:Default

Morph:[module_num:27|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
    Select the input image:CellImage2
    Name the output image:MorphBlue
    Select the operation to perform:convex hull
    Number of times to repeat operation:Once
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
IdentifyPrimaryObjects:[module_num:28|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
    Select the input image:MorphBlue
    Name the primary objects to be identified:IdentifyPrimaryObjects3
    Typical diameter of objects, in pixel units (Min,Max):100,1500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:1
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
ConvertObjectsToImage:[module_num:29|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
    Select the input objects:IdentifyPrimaryObjects3
    Name the output image:CellImage3
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:CellImage3
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:31|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
    Select object sets to measure:EditedObjects, IdentifyPrimaryObjects, IdentifyPrimaryObjects3
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureImageIntensity:[module_num:32|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
    Select images to measure:CorrBlue, DNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:EditedObjects, IdentifyPrimaryObjects
    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Metadata_Well,Image|Metadata_Site,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_ChannelNumber,Image|Metadata_Plate,Image|Metadata_FileLocation,Image|ExecutionTime_20CombineObjects,Image|ExecutionTime_22FilterObjects,Image|ExecutionTime_13SaveImages,Image|ExecutionTime_25CombineObjects,Image|ExecutionTime_18ConvertObjectsToImage,Image|ExecutionTime_16RescaleIntensity,Image|ExecutionTime_27Morph,Image|ExecutionTime_05RescaleIntensity,Image|ExecutionTime_14MaskImage,Image|ExecutionTime_26ConvertObjectsToImage,Image|ExecutionTime_10RescaleIntensity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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