CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:GCAMP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:Trans
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:GCAMP
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:1
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Trans
    Name the primary objects to be identified:IdentifyPrimaryObjectsLIVE
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.48,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:IdentifyPrimaryObjectsLIVE
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:IdentifyPrimaryObjectsLIVE
    Name the output objects:FilterObjectsLIVE
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.88
    Filter using a maximum measurement value?:No
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
GaussianFilter:[module_num:9|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
    Select the input image:RescaleIntensity
    Name the output image:GaussianFilter1G
    Sigma:1

GaussianFilter:[module_num:10|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
    Select the input image:GaussianFilter1G
    Name the output image:GaussianFilter2G
    Sigma:200

CorrectIlluminationApply:[module_num:11|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
    Select the input image:GaussianFilter1G
    Name the output image:CorrGCAMP
    Select the illumination function:GaussianFilter2G
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:CorrGCAMP
    Name the primary objects to be identified:IdentifyPrimaryObjectsGCAMP
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.02,1.0
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    Log transform before thresholding?:No
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
MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:IdentifyPrimaryObjectsGCAMP
    Select neighboring objects to measure:IdentifyPrimaryObjectsGCAMP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:IdentifyPrimaryObjectsGCAMP
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:GCAMP
    Select objects to measure:IdentifyPrimaryObjectsGCAMP

FilterObjects:[module_num:16|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
    Select the objects to filter:IdentifyPrimaryObjectsGCAMP
    Name the output objects:FilterObjectsGCAMP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:4
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedObjects2
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1500
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.88
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_GCAMP
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.9
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
MaskObjects:[module_num:17|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
    Select objects to be masked:FilterObjectsGCAMP
    Name the masked objects:LiveCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifyPrimaryObjectsLIVE
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:18|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
    Select the input objects:LiveCells
    Name the output objects:ExpandedFiltered
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
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
IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:LiveCells
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Distance - N
    Select the input image:GCAMP
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
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
IdentifyTertiaryObjects:[module_num:20|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
    Select the larger identified objects:IdentifySecondaryObjects
    Select the smaller identified objects:ExpandedFiltered
    Name the tertiary objects to be identified:Background
    Shrink smaller object prior to subtraction?:No

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:OrigOverlayBack
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Background

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:OrigOverlayLive
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:LiveCells

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Trans
    Name the output image:OrigOverlayTrans
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:LiveCells

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayBack
    Select method for constructing file names:From image filename
    Select image name for file prefix:Trans
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj1
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayLive
    Select method for constructing file names:From image filename
    Select image name for file prefix:GCAMP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayTrans
    Select method for constructing file names:From image filename
    Select image name for file prefix:GCAMP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj3
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:27|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
    Select images to measure:CorrGCAMP, GCAMP
    Select objects to measure:Background, LiveCells

CalculateMath:[module_num:28|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
    Name the output measurement:MinusBackground1
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:LiveCells
    Select the minuend measurement:Intensity_MeanIntensity_GCAMP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:Background
    Select the subtrahend measurement:Intensity_MeanIntensity_GCAMP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:29|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
    Name the output measurement:MinusBackgroundCorrectedBack
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:LiveCells
    Select the minuend measurement:Intensity_MeanIntensity_CorrGCAMP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:Background
    Select the subtrahend measurement:Intensity_MeanIntensity_CorrGCAMP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjectsGCAMP|Intensity_MinIntensity_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_MeanIntensityEdge_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_UpperQuartileIntensity_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_StdIntensityEdge_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_MaxIntensity_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_LowerQuartileIntensity_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_MADIntensity_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_MeanIntensity_GCAMP,IdentifyPrimaryObjectsGCAMP|Intensity_IntegratedIntensityEdge_GCAMP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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