CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:ASAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:ASAP
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.07
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
MeasureObjectNeighbors:[module_num:6|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
    Select objects to measure:IdentifyPrimaryObjects
    Select neighboring objects to measure:IdentifyPrimaryObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:ASAP
    Select objects to measure:IdentifyPrimaryObjects

FilterObjects:[module_num:9|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjects
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1100
    Filter using a maximum measurement value?:Yes
    Maximum value:3000
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_10
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:.75
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ASAP
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:FilterObjects

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:ASAP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:obj2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExpandOrShrinkObjects:[module_num:13|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
    Select the input objects:FilterObjects
    Name the output objects:ExpandedFiltered
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:ExpandedFiltered
    Name the objects to be identified:Background
    Select the method to identify the secondary objects:Distance - N
    Select the input image:ASAP
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
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
IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Background
    Select the smaller identified objects:ExpandedFiltered
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:ASAP
    Select objects to measure:Background, Cytoplasm, FilterObjects

CalculateMath:[module_num:17|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
    Name the output measurement:MeanBackgroundSUB
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:FilterObjects
    Select the minuend measurement:Intensity_MeanIntensity_ASAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:Cytoplasm
    Select the subtrahend measurement:Intensity_MeanIntensity_ASAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:18|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
    Name the output measurement:BackgroundIntegrated
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Cytoplasm
    Select the first operand measurement:Intensity_MeanIntensity_ASAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:FilterObjects
    Select the second operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:19|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
    Name the output measurement:IntegratedSUBbackground
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:FilterObjects
    Select the minuend measurement:Intensity_IntegratedIntensity_ASAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:Cytoplasm
    Select the subtrahend measurement:Math_BackgroundIntegrated
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ModuleError_12SaveImages,Image|ModuleError_07MeasureObjectSizeShape,Image|ModuleError_10MeasureObjectSizeShape,Image|ModuleError_06MeasureObjectNeighbors,Image|ModuleError_09FilterObjects,Image|ModuleError_19CalculateMath,Image|ModuleError_14IdentifySecondaryObjects,Image|ModuleError_11OverlayOutlines,Image|ModuleError_01Images,Image|ModuleError_02Metadata,Image|ModuleError_16MeasureObjectIntensity,Image|ModuleError_04Groups,Image|ModuleError_03NamesAndTypes,Image|ModuleError_17CalculateMath,Image|ModuleError_05IdentifyPrimaryObjects,Image|ModuleError_15IdentifyTertiaryObjects,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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