CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:Dead
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Live
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Live
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):100,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Log transform before thresholding?:No
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
EditObjectsManually:[module_num:6|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
    Select the objects to be edited:IdentifyPrimaryObjects
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Live
    Allow overlapping objects?:No

OverlayObjects:[module_num:7|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
    Input:Live
    Name the output image:OverlayObjectsEdited
    Objects:EditedObjects
    Opacity:0.3

IdentifyObjectsManually:[module_num:8|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
    Select the input image:OverlayObjectsEdited
    Name the objects to be identified:Cells

CombineObjects:[module_num:9|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
    Select initial object set:EditedObjects
    Select object set to combine:Cells
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

OverlayObjects:[module_num:10|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
    Input:Live
    Name the output image:OverlayObjectsAll
    Objects:CombinedObjects
    Opacity:0.3

Threshold:[module_num:11|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
    Select the input image:Dead
    Name the output image:ThresholdDead
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:.7
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
ConvertImageToObjects:[module_num:12|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
    Select the input image:ThresholdDead
    Name the output object:DeadObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayObjects:[module_num:13|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
    Input:Dead
    Name the output image:OverlayObjectsDead
    Objects:DeadObjects
    Opacity:0.3

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsAll
    Select method for constructing file names:From image filename
    Select image name for file prefix:Live
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsDead
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dead
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskImage:[module_num:16|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
    Select the input image:ThresholdDead
    Name the output image:MaskDead
    Use objects or an image as a mask?:Objects
    Select object for mask:CombinedObjects
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    Invert the mask?:No

ConvertImageToObjects:[module_num:17|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
    Select the input image:MaskDead
    Name the output object:InternalDead
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:CombinedObjects, InternalDead
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:19|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
    Select images to measure:Dead, Live
    Select objects to measure:CombinedObjects

RelateObjects:[module_num:20|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
    Parent objects:CombinedObjects
    Child objects:InternalDead
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:CombinedObjects, InternalDead
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

CalculateMath:[module_num:22|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
    Name the output measurement:TotalChildArea
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:CombinedObjects
    Select the first operand measurement:Mean_InternalDead_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:CombinedObjects
    Select the second operand measurement:Children_InternalDead_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:23|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
    Name the output measurement:PercentLive
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CombinedObjects
    Select the numerator measurement:Math_TotalChildArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:CombinedObjects
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ExecutionTime_12ConvertImageToObjects,Image|ExecutionTime_08IdentifyObjectsManually,Image|ExecutionTime_22CalculateMath,Image|ExecutionTime_01Images,Image|ExecutionTime_16MaskImage,Image|ExecutionTime_11Threshold,Image|ExecutionTime_13OverlayObjects,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_06EditObjectsManually,Image|ExecutionTime_15SaveImages,Image|ExecutionTime_21MeasureObjectSizeShape,Image|ExecutionTime_23CalculateMath,Image|ExecutionTime_05IdentifyPrimaryObjects,Image|ExecutionTime_19MeasureObjectIntensity,Image|ExecutionTime_02Metadata,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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