CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:Dead
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Live
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Live
    Name the output image:GaussianFilter
    Sigma:1

GaussianFilter:[module_num:6|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
    Select the input image:Dead
    Name the output image:GaussianFilterD
    Sigma:1

RescaleIntensity:[module_num:7|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
    Select the input image:GaussianFilter
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:IdentifyPrimaryObjectsLive
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.07,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:GaussianFilterD
    Name the primary objects to be identified:IdentifyPrimaryObjectsDead
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.45,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

CombineObjects:[module_num:10|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
    Select initial object set:IdentifyPrimaryObjectsDead
    Select object set to combine:IdentifyPrimaryObjectsLive
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjectsTotal

OverlayObjects:[module_num:11|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
    Input:Live
    Name the output image:OverlayObjectsLive
    Objects:IdentifyPrimaryObjectsLive
    Opacity:0.3

OverlayObjects:[module_num:12|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
    Input:Dead
    Name the output image:OverlayObjectsDead
    Objects:IdentifyPrimaryObjectsDead
    Opacity:0.3

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsLive
    Select method for constructing file names:From image filename
    Select image name for file prefix:Live
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsDead
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dead
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:CombinedObjectsTotal, IdentifyPrimaryObjectsDead, IdentifyPrimaryObjectsLive
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:Dead, Live
    Select objects to measure:CombinedObjectsTotal, IdentifyPrimaryObjectsDead, IdentifyPrimaryObjectsLive

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjectsLive|Intensity_UpperQuartileIntensity_Live,IdentifyPrimaryObjectsLive|Intensity_UpperQuartileIntensity_Dead,IdentifyPrimaryObjectsLive|Intensity_MeanIntensity_Dead,IdentifyPrimaryObjectsLive|Intensity_MeanIntensity_Live,IdentifyPrimaryObjectsLive|Intensity_StdIntensity_Live,IdentifyPrimaryObjectsLive|Intensity_StdIntensity_Dead,IdentifyPrimaryObjectsLive|Intensity_MinIntensityEdge_Live,IdentifyPrimaryObjectsLive|Intensity_MinIntensityEdge_Dead,IdentifyPrimaryObjectsLive|Intensity_MeanIntensityEdge_Dead,IdentifyPrimaryObjectsLive|Intensity_MeanIntensityEdge_Live,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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