CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:45
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:Live
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:Dead
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:DNA
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:Dead
    Name the output image:CropDead
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:7|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
    Select the input image:Live
    Name the output image:CropLive
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:2000,-2000
    Top and bottom rectangle positions:2000,-2000
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    Remove empty rows and columns?:Edges
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
GaussianFilter:[module_num:8|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
    Select the input image:CropBlue
    Name the output image:GaussianFilterBlue1
    Sigma:1

GaussianFilter:[module_num:9|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
    Select the input image:GaussianFilterBlue1
    Name the output image:GaussianFilterBlue2
    Sigma:600

CorrectIlluminationApply:[module_num:10|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
    Select the input image:GaussianFilterBlue1
    Name the output image:CorrBlue
    Select the illumination function:GaussianFilterBlue2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:IdentifyPrimaryObjects1
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.06,1.0
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    Log transform before thresholding?:Yes
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
GaussianFilter:[module_num:12|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
    Select the input image:CropLive
    Name the output image:GaussianFilterL1
    Sigma:1

GaussianFilter:[module_num:13|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
    Select the input image:GaussianFilterL1
    Name the output image:GaussianFilterL2
    Sigma:300

CorrectIlluminationApply:[module_num:14|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
    Select the input image:GaussianFilterL1
    Name the output image:CorrLive
    Select the illumination function:GaussianFilterL2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:15|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
    Select the input image:CorrLive
    Name the output image:RescaleIntensityL
    Rescaling method:Divide each image by the same value
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    Divisor value:.5
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
IdentifyPrimaryObjects:[module_num:16|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enabled:False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
    Select the input image:CropLive
    Name the primary objects to be identified:IdentifyPrimaryObjectsL1
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:.1
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
IdentifyPrimaryObjects:[module_num:17|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enabled:False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
    Select the input image:RescaleIntensityL
    Name the primary objects to be identified:IdentifyPrimaryObjectsL2
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.1,1.0
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    Size of adaptive window:40
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    Thresholding method:Sauvola

CombineObjects:[module_num:18|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enabled:False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
    Select initial object set:IdentifyPrimaryObjectsL1
    Select object set to combine:IdentifyPrimaryObjectsL2
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjectsL1

GaussianFilter:[module_num:19|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
    Select the input image:CropDead
    Name the output image:GaussianFilterD1
    Sigma:1

GaussianFilter:[module_num:20|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
    Select the input image:GaussianFilterD1
    Name the output image:GaussianFilterD2
    Sigma:300

CorrectIlluminationApply:[module_num:21|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
    Select the input image:GaussianFilterD1
    Name the output image:CorrDead
    Select the illumination function:GaussianFilterD2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:CorrDead
    Name the primary objects to be identified:IdentifyPrimaryObjectsD1
    Typical diameter of objects, in pixel units (Min,Max):8,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.03,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:CorrDead
    Name the primary objects to be identified:IdentifyPrimaryObjectsD2
    Typical diameter of objects, in pixel units (Min,Max):8,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.09,1.0
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    Log transform before thresholding?:No
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
CombineObjects:[module_num:24|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
    Select initial object set:IdentifyPrimaryObjects1
    Select object set to combine:IdentifyPrimaryObjectsD2
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects1

CombineObjects:[module_num:25|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enabled:False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
    Select initial object set:CombinedObjects1
    Select object set to combine:CombinedObjectsL1
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjectsAll

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:CropLive, RescaleIntensityL
    Select objects to measure:IdentifyPrimaryObjectsD1

FilterObjects:[module_num:27|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
    Select the objects to filter:IdentifyPrimaryObjectsD1
    Name the output objects:DeadObjectsNotLive
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:FalseDead
    Select the measurement to filter by:Intensity_MaxIntensity_RescaleIntensityL
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.3

CombineObjects:[module_num:28|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
    Select initial object set:DeadObjectsNotLive
    Select object set to combine:IdentifyPrimaryObjectsD2
    Select how to handle overlapping objects:Merge
    Name the combined object set:DeadObjectsForReal

CombineObjects:[module_num:29|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
    Select initial object set:CombinedObjects1
    Select object set to combine:DeadObjectsForReal
    Select how to handle overlapping objects:Merge
    Name the combined object set:AllObjects

MaskObjects:[module_num:30|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
    Select objects to be masked:IdentifyPrimaryObjects1
    Name the masked objects:ForRealLive
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DeadObjectsForReal
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:31|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
    Select the input objects:ForRealLive
    Name the objects to be identified:IdentifySecondaryObjectsLive
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaleIntensityL
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.02,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

MeasureObjectSizeShape:[module_num:32|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
    Select object sets to measure:IdentifySecondaryObjectsLive
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:33|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
    Select images to measure:CorrLive
    Select objects to measure:IdentifySecondaryObjectsLive

FilterObjects:[module_num:34|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
    Select the objects to filter:IdentifySecondaryObjectsLive
    Name the output objects:FilterObjectsForRealLive
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_CorrLive
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
OverlayObjects:[module_num:35|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
    Input:RescaleIntensityL
    Name the output image:OverlayObjects
    Objects:DeadObjectsNotLive
    Opacity:0.3

ConvertObjectsToImage:[module_num:36|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
    Select the input objects:DeadObjectsForReal
    Name the output image:CellImageDead
    Select the color format:Color
    Select the colormap:Wistia_r

ConvertObjectsToImage:[module_num:37|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
    Select the input objects:FilterObjectsForRealLive
    Name the output image:CellImageLive
    Select the color format:Color
    Select the colormap:Greens

ConvertObjectsToImage:[module_num:38|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
    Select the input objects:AllObjects
    Name the output image:CellImageAll
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:39|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enabled:False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
    Select the input objects:IdentifyPrimaryObjects1
    Name the output image:CellImageAll2
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:CellImageLive
    Select method for constructing file names:From image filename
    Select image name for file prefix:Live
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:CellImageDead
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dead
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:CellImageAll
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:43|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellImageAll2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:all
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dead
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:over1
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:45|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjectsD1|Children_DeadObjectsNotLive_Count,IdentifyPrimaryObjectsD1|Children_FalseDead_Count,IdentifyPrimaryObjectsD1|Location_Center_X,IdentifyPrimaryObjectsD1|Location_Center_Z,IdentifyPrimaryObjectsD1|Location_Center_Y,IdentifyPrimaryObjectsD1|Location_CenterMassIntensity_X_CropLive,IdentifyPrimaryObjectsD1|Location_CenterMassIntensity_X_RescaleIntensityL,IdentifyPrimaryObjectsD1|Location_CenterMassIntensity_Z_RescaleIntensityL,IdentifyPrimaryObjectsD1|Location_CenterMassIntensity_Z_CropLive,IdentifyPrimaryObjectsD1|Location_CenterMassIntensity_Y_RescaleIntensityL,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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