CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:500
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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    Extract image planes:No
    Split channels:Yes
    Split z-planes:Yes
    Split timepoints:Yes

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d4.TIF")
    Name to assign these images:DNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "B.TIF")
    Name to assign these images:DNA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the 1st image:OrigGray
    Multiply the 1st image by:1.0
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    Image or measurement?:Image
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    Multiply the 2nd image by:1.0
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
GaussianFilter:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the output image:GaussianFilter
    Sigma:2

RunCellpose:[module_num:8|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enabled:False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
    Select the input image:OrigGray
    Rescale images before running Cellpose:No
    Run CellPose in a Docker/Podman container or local python environment:Docker
    Select Cellpose version:v3
    Select Cellpose docker image:cellprofiler/runcellpose_omnipose_no_pretrained:1.0.2
    Select Cellpose docker image:cellprofiler/runcellpose_no_pretrained:2.3.2
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:3.1.1.2
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:4.0.6
    Specify expected object diameter?:No
    Expected object diameter:50
    Detection mode:cyto
    Detection mode:cyto
    Detection mode:cyto3
    Detection mode:cpsam
    Name the output object:RunCellpose
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:.4
    Cell probability threshold:0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:Yes
    Preprocess image before segmentation?:No
    Preprocessing model:denoise_cyto3
    Save preprocessed image?:No
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    Cache model between image sets:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:GaussianFilter
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):25,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:.56
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
Threshold:[module_num:10|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
    Select the input image:DNA2
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:.0001
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
MaskImage:[module_num:11|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
    Select the input image:DNA2
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

ImageMath:[module_num:12|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the 1st image:MaskBlue
    Multiply the 1st image by:1.0
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    Image or measurement?:Image
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    Multiply the 2nd image by:1.0
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:IdentifyPrimaryObjects
    Select neighboring objects to measure:IdentifyPrimaryObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
CalculateMath:[module_num:15|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
    Name the output measurement:MeasurementAxisRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:IdentifyPrimaryObjects
    Select the numerator measurement:AreaShape_MajorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:IdentifyPrimaryObjects
    Select the denominator measurement:AreaShape_MinorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:16|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1000
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_MeasurementAxisRatio
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.2
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_2
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2
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
MeasureObjectIntensity:[module_num:17|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
    Select images to measure:ImageAfterMath, Threshold
    Select objects to measure:FilterObjects1

ExpandOrShrinkObjects:[module_num:18|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
    Select the input objects:FilterObjects1
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskImage:[module_num:19|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
    Select the input image:Threshold
    Name the output image:MaskBlueShrunk
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenNuclei
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    Invert the mask?:No

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:ShrunkenNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:Threshold
    Select objects to measure:ShrunkenNuclei

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskBlueShrunk
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ShrunkenNuclei

DisplayDataOnImage:[module_num:23|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
    Display object or image measurements?:Object
    Select the input objects:ShrunkenNuclei
    Measurement to display:Intensity_IntegratedIntensity_Threshold
    Select the image on which to display the measurements:OrigOverlay
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage1
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

FilterObjects:[module_num:24|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
    Select the objects to filter:ShrunkenNuclei
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:ImageAfterMath, Threshold
    Select objects to measure:FilterObjects

OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:FilterObjects

DisplayDataOnImage:[module_num:28|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
    Display object or image measurements?:Object
    Select the input objects:FilterObjects
    Measurement to display:Intensity_IntegratedIntensity_Threshold
    Select the image on which to display the measurements:OrigOverlay2
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage2
    Font size (points):10
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage1
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA2
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|AreaShape_BoundingBoxMaximum_X,IdentifyPrimaryObjects|AreaShape_BoundingBoxMaximum_Y,IdentifyPrimaryObjects|AreaShape_Zernike_4_2,IdentifyPrimaryObjects|AreaShape_Zernike_4_0,IdentifyPrimaryObjects|AreaShape_Zernike_4_4,IdentifyPrimaryObjects|AreaShape_Zernike_6_6,IdentifyPrimaryObjects|AreaShape_Zernike_6_4,IdentifyPrimaryObjects|AreaShape_Zernike_6_0,IdentifyPrimaryObjects|AreaShape_Zernike_6_2,IdentifyPrimaryObjects|AreaShape_Zernike_8_0,IdentifyPrimaryObjects|AreaShape_Zernike_8_8,IdentifyPrimaryObjects|AreaShape_Zernike_8_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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